opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: Test Protocol 1 (OT-2)
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 1}
  1: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, location: 5}
  2: {definitionId: opentrons/armadillo_96_wellplate_200ul_pcr_full_skirt/2, location: 6}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Test1
  - Test2
ingredLocations:
  1:
    Test1 {volume: 200}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  2:
    Test2 {volume: 100}: A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: 1
  aspirate_wells: A1-H1
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  dispense_labware: 2
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: 1
  aspirate_wells: A2
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  dispense_labware: 2
  dispense_wells: A2
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 50
  times: 5
  changeTip: always
  labware: 2
  wells: A1
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  volume: 25
  times: 5
  changeTip: always
  labware: 2
  wells: A7-H7
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseSecond: 20
  pauseMessage: Pause test
- stepType: moveLabware
  stepName: move labware
  labware: 1
  useGripper: false
  newLocation: 10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: 1
  aspirate_wells: A5-H5
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  aspirate_delay_checkbox: true
  aspirate_delay_seconds: 1
  dispense_labware: 2
  dispense_wells: A5-H5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: 2
  aspirate_wells: A7
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  aspirate_touchTip_checkbox: true
  dispense_labware: 2
  dispense_wells: A5
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 100, labwareId: 1, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 100, labwareId: 2, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 46.43}
- dropTip: {pipetteId: p300_single_gen2, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: B1}
- aspirate: {pipetteId: p300_single_gen2, volume: 100, labwareId: 1, wellName: B1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 46.43}
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