opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: Test Protocol 3 (Flex)
robot: {model: OT-3 Standard, deckId: ot3_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen3: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons Flex 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_flex_96_filtertiprack_200ul/1, location: D1}
  L1: {definitionId: opentrons/agilent_1_reservoir_290ml/1, location: C1}
  L2: {definitionId: opentrons/agilent_1_reservoir_290ml/1, location: B1}
  Mix: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: C2}
pipetteTiprackAssignments:
  p1000_single_gen3: opentrons/opentrons_flex_96_filtertiprack_200ul/1
ingredients:
  - Test1
  - Test2
ingredLocations:
  L1:
    Test1 {volume: 29000}: A1
  L2:
    Test2 {volume: 29000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: L1
  aspirate_wells: A1
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  dispense_labware: Mix
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: L2
  aspirate_wells: A1
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  dispense_labware: Mix
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: L1
  aspirate_wells: A1
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  dispense_labware: Mix
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: L2
  aspirate_wells: A1
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  dispense_labware: Mix
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: L1
  aspirate_wells: A1
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  dispense_labware: Mix
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: L2
  aspirate_wells: A1
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  dispense_labware: Mix
  dispense_wells: A4
- stepType: mix
  stepName: mix
  pipette: p1000_single_gen3
  volume: 200
  times: 5
  changeTip: always
  labware: Mix
  wells: A3, A4
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  mix_mmFromBottom: 0.5
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p1000_single_gen3, labwareId: Opentrons Flex 96 Filter Tip Rack 200 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen3, volume: 200, labwareId: L1, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 137.35}
- dispense: {pipetteId: p1000_single_gen3, volume: 200, labwareId: Mix, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 137.35}
- dropTip: {pipetteId: p1000_single_gen3, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p1000_single_gen3, labwareId: Opentrons Flex 96 Filter Tip Rack 200 µL, wellName: B1}
- aspirate: {pipetteId: p1000_single_gen3, volume: 200, labwareId: L2, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 137.35}
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