opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: simple
author: engineering@opentrons.com
description: simple
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_filtertiprack_10ul/1, slot: 1}
  NEST 1 Well Reservoir 195 mL: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 5}
  Bio-Rad 96 Well Plate 200 µL PCR: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_10ul/1
ingredients:
  - water
ingredLocations:
  NEST 1 Well Reservoir 195 mL:
    water {volume: 10000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: NEST 1 Well Reservoir 195 mL
  aspirate_wells: A1
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: NEST 1 Well Reservoir 195 mL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: NEST 1 Well Reservoir 195 mL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: B1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: NEST 1 Well Reservoir 195 mL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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