opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: the moves ⬆️
author: Opentrons
description: look move the pipette OK?
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  NEST 12 Well Reservoir 15 mL: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 2}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 3}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Yellow
  - blue
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Yellow {volume: 800}: A1
    blue {volume: 800}: A2
savedStepForms:
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  volume: 20
  times: 5
  changeTip: once
  labware: NEST 12 Well Reservoir 15 mL
  wells: A1, A2
  aspirate_delay_checkbox: true
  aspirate_delay_seconds: 2
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  mix_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1, A2, H2, A3, H3, A4, H4, A5, H5, A6, H6, A7, H7, A8, H8, A9, H9, A10, H10, A11, H11, A12-H12
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: Trash
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Unpause me
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: multiDispense
  changeTip: always
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: B2-G2, B3, G3, B4, G4, B5, G5, B6, G6, B7, B8, G8, B9, G9, B10, G10, B11-G11
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: Trash
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 20, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- delay: {wait: 2}
- dispense: {pipette: p300_single_gen2, volume: 20, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 20, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- delay: {wait: 2}
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