opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: Test Protocol 7 (Flex) ('Do All')
robot: {model: OT-3 Standard, deckId: ot3_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen3: {mount: left}
  p1000_multi_gen3: {mount: right}
modules:
  magneticBlockV1: {location: D2}
  heaterShakerModuleV1: {location: D1}
  temperatureModuleV2: {location: D3}
  thermocyclerModuleV2: {location: B1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons Flex 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_flex_96_filtertiprack_200ul/1, location: C1}
  Opentrons Flex 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_flex_96_filtertiprack_1000ul/1, location: C2}
  Armadillo 96 Well Plate 200 µL PCR Full Skirt: {definitionId: opentrons/armadillo_96_wellplate_200ul_pcr_full_skirt/2, location: magneticBlockV1}
  Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL: {definitionId: opentrons/opentrons_96_aluminumblock_nest_wellplate_100ul/1, location: temperatureModuleV2}
  Start: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: C3}
  Opentrons Flex 96 Filter Tip Rack 1000 µL (1): {definitionId: opentrons/opentrons_flex_96_filtertiprack_1000ul/1, location: B3}
  Opentrons Flex 96 Filter Tip Rack 200 µL (1): {definitionId: opentrons/opentrons_flex_96_filtertiprack_200ul/1, location: A3}
  Opentrons Flex 96 Filter Tip Rack 1000 µL (2): {definitionId: opentrons/opentrons_flex_96_filtertiprack_1000ul/1, location: A2}
  Opentrons Flex 96 Filter Tip Rack 200 µL (2): {definitionId: opentrons/opentrons_flex_96_filtertiprack_200ul/1, location: B2}
pipetteTiprackAssignments:
  p1000_single_gen3: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  p1000_multi_gen3: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
ingredients:
  - 1
  - 2
  - 3
  - 4
ingredLocations:
  Start:
    1 {volume: 10000}: A1-A4
    2 {volume: 10000}: A5-A7
    3 {volume: 10000}: A8-A10
    4 {volume: 15000}: A11, A12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A1
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A2
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A2-A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A5
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A2-A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 50
  path: single
  changeTip: never
  aspirate_labware: Start
  aspirate_wells: A8
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A2-A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A11
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A2-A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A2
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A5, C5, E5, G5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A5
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: B5, D5, F5, H5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A8
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A5, C5, E5, G5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A11
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  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: B5, D5, F5, H5
- stepType: mix
  stepName: mix
  pipette: p1000_multi_gen3
  volume: 200
  times: 10
  changeTip: always
  labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  wells: A2-A5
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  mix_mmFromBottom: 0.5
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  latchOpen: true
- stepType: moveLabware
  stepName: move labware
  labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  useGripper: true
  newLocation: heaterShakerModuleV1
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  targetSpeed: 2000
  setShake: true
  latchOpen: false
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A1
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  dispense_labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  dispense_wells: A1, A3, A5, A7, A9, A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: Start
  aspirate_wells: A5
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  dispense_labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  dispense_wells: A2, A4, A6, A8, A10, A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Start
  aspirate_wells: A8
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  dispense_labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  dispense_wells: A2, A4, A6, A8, A10, A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: Start
  aspirate_wells: A11
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  dispense_labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  dispense_wells: A1, A3, A5, A7, A9, A11
- stepType: mix
  stepName: mix
  pipette: p1000_multi_gen3
  volume: 100
  times: 5
  changeTip: never
  labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  wells: A1-A12
  aspirate_delay_checkbox: true
  aspirate_delay_seconds: 1
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  mix_mmFromBottom: 0.5
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  latchOpen: false
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_gen3
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  aspirate_wells: A1-A12
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  aspirate_touchTip_checkbox: true
  dispense_labware: Armadillo 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A6
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLabware
  stepName: move labware
  labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  useGripper: true
  newLocation: thermocyclerModuleV2
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 50
  lidIsActive: true
  lidTargetTemp: 50
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  lidOpen: false
- stepType: moveLabware
  stepName: move labware
  labware: Start
  useGripper: false
  newLocation: offDeck
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLabware
  stepName: move labware
  labware: Opentrons 96 Well Aluminum Block with NEST Well Plate 100 µL
  useGripper: true
  newLocation: temperatureModuleV2
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 80
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 80
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p1000_multi_gen3, labwareId: Opentrons Flex 96 Filter Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_multi_gen3, volume: 200, labwareId: Start, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 159.04}
- dispense: {pipetteId: p1000_multi_gen3, volume: 200, labwareId: Armadillo 96 Well Plate 200 µL PCR Full Skirt, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 159.04}
- dropTip: {pipetteId: p1000_multi_gen3, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p1000_multi_gen3, labwareId: Opentrons Flex 96 Filter Tip Rack 1000 µL, wellName: A2}
- aspirate: {pipetteId: p1000_multi_gen3, volume: 50, labwareId: Start, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 159.04}
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